// Elastix parameters optimized for neonatal ALBERTs dataset
//
// See etc/params/elastix-asym-ffd-asgd-evl_02.{gen,csv} for different
// combinations of parameters that have been tested with the 'alberts-tune'
// dataset, i.e., the subset consisting of the first 5 ALBERTs images.
//
// This configuration produces final FFDs with 2.5 mm control point spacing.
// For smoother transformations, see also the parameter file optimized for
// a final control point spacing of 5 mm.
//
// Version: elastix 4.8

(ShowExactMetricValue "false")
(UseFastAndLowMemoryVersion "true")
(UseDirectionCosines "true")

(WriteResultImage "false")
(ResultImagePixelType "short")
(ResultImageFormat "nii.gz")
(CompressResultImage "true")

(FixedInternalImagePixelType "float")
(MovingInternalImagePixelType "float")
(FixedImageDimension 3)
(MovingImageDimension 3)
(DefaultPixelValue 0)

// Eroding brain masks, especially moving mask, may lead to "too many samples outside" error
// See also http://lists.bigr.nl/pipermail/elastix/2014-February/001370.html
(ErodeFixedMask "false")
(ErodeMovingMask "false")

(NumberOfResolutions 4)
(ImagePyramidSchedule 8 8 8  4 4 4  2 2 2  1 1 1)
(Registration "MultiMetricMultiResolutionRegistration")
(FixedImagePyramid "FixedRecursiveImagePyramid")
(MovingImagePyramid "MovingRecursiveImagePyramid")
(Interpolator "LinearInterpolator")
(ResampleInterpolator "FinalLinearInterpolator")
(BSplineInterpolationOrder 3)
(FixedImageBSplineInterpolationOrder 3)
(MovingImageBSplineInterpolationOrder 3)
(FinalBSplineInterpolationOrder 3)
(Resampler "DefaultResampler")

(FinalGridSpacingInPhysicalUnits 2.5)
(GridSpacingSchedule 8.0 4.0 2.0 1.0)
(Transform "BSplineTransform")
(BSplineTransformSplineOrder 3)
(UseCyclicTransform "false")
(HowToCombineTransforms "Add") // IRTK model, see Rueckert et al. (1999)

(Metric "NormalizedMutualInformation" "TransformBendingEnergyPenalty")
(NumberOfSamplesForSelfHessian 100000)  // TransformBendingEnergyPenalty
(FixedKernelBSplineOrder 3)
(MovingKernelBSplineOrder 3)
(NumberOfHistogramBins 64)
(NumberOfFixedHistogramBins 64)
(NumberOfMovingHistogramBins 64)
(FixedLimitRangeRatio 0.01)
(MovingLimitRangeRatio 0.01)
(UseRelativeWeights "false")
(Metric0Weight 1)
(Metric1Weight 0.1)

(Optimizer "AdaptiveStochasticGradientDescent")
(AutomaticParameterEstimation "false")
(ASGDParameterEstimationMethod "Original")
(SigmoidInitialTime 0)
(SigmoidScaleFactor 0.1)
(MaxBandCovSize 192)
(NumberOfBandStructureSamples 10)
(NumberOfGradientMeasurements 0)
(NumberOfJacobianMeasurements 1000 5000 10000 20000)
(NumberOfSamplesForExactGradient 100000)
(SP_alpha 1)
(SP_A 50)
(SP_a 50000 100000 200000 500000)
(MaximumNumberOfIterations 1000)
(MaximumStepLength 0.5)
(NoiseCompensation "true")
(UseAdaptiveStepSizes "true")  // unused when ImageSampler is RandomCoordinate

(ImageSampler "Random")
(NewSamplesEveryIteration "true")
(NumberOfSpatialSamples 500 1000 2000 4000)
(CheckNumberOfSamples "true")
(UseRandomSampleRegion "false")
(MaximumNumberOfSamplingAttempts 3)
